CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:10
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):Cherry
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:H2B
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):YFP
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:ERKKTR
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):RedoGreen
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:RedoGreen
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:H2B
    Name the primary objects to be identified:PreNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:3|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
    Select the input objects:PreNuclei
    Name the output objects:nuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
SaveImages:[module_num:4|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
    Select the type of image to save:Objects
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    Select the objects to save:nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:H2B
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:PreNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ERKKTR
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Kapur
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Cells
    Name the output objects:PreCells
    Select the operation:Add partial dividing lines between objects
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    Retain the outlines of the identified objects?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:PreCells
    Select the smaller identified objects:PreNuclei
    Name the tertiary objects to be identified:cytoring
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Objects
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    Select the objects to save:cytoring
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ERKKTR
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cytoring
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:3
    Select an image to measure:H2B
    Select an image to measure:ERKKTR
    Select an image to measure:RedoGreen
    Select objects to measure:nuclei
    Select objects to measure:cytoring

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:nuclei
    Select objects to measure:cytoring
    Calculate the Zernike features?:No
